load_file("nrngui.hoc")

//objref weight, delay, syn_reversal
objref syn_reversal
objref f
strdef filename

proc read_settings(){local i, j, num_cell
    num_cell = $1
    
    weight = new Matrix()
    f = new File()
    //read these data from params.txt ??
    // f.ropen("../data/weight.dat")
    // weight.scanf(f, num_cell, num_cell)
    // f.close()
    
    // delay = new Matrix()
    // f = new File()
    // f.ropen("../data/delay.dat")
    // delay.scanf(f, num_cell, num_cell)
    // f.close()
    
    // syn_reversal = new Matrix()
    // f = new File()
    // f.ropen("../data/rev_potential.dat")
    // syn_reversal.scanf(f, num_cell, num_cell)
    // f.close()
    
    syn_reversal = new Matrix(num_cell, num_cell)
    for i=0, num_cell-1{
	for j=0, num_cell-1{
	    if(j%2==0 || j==(num_cell-1)){
		syn_reversal.x[i][j] = 0
	    }else{
		syn_reversal.x[i][j] = -40
	    }
	}
    }
    
    // for i=0, num_cell-1{
    // 	for j=0, num_cell-1{
    // 	    printf("%d\t",weight.x[i][j])
    // 	}
    // 	printf("\n")
    // }
}
